PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': '001', 'sesion': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2024
  Window size (pixels) = [1920, 1080]
  clockFormat = iso
  expName = mini_1back
  keyboardBackend = PsychToolbox
  runMode = 0
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      desc = Tarea 1-back: secuencia de 20 bloques de 20 letras cada uno con 4 targets cada bloque. 
      forceNonSlip = True
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    TextComponent SecuenciaLetras
      letterHeight = 0.14
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Letra
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    KeyboardComponent respuesta
      allowedKeys [set every repeat] = 'space', 'escape'
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = all keys
      storeCorrect = True
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    CodeComponent codigoLetras
      Code Type = Py
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      Begin Experiment:
        #Librerías importadas
        import pandas as pd     # Para guardar y analizar datos
        import random           # Para escoger un número al azar

        #Inicialización variables
        Trigger2 = 5    # Trigger que se manda cuando se pulsa espacio

        flag1 = 0       # Indica que el Trigger es 2 o 3 (no target)
        flag2 = 0       # Indica que el Trigger es 4 (target)
        flag3 = 0       # Indica que se ha pulsado la tecla 'espacio'

        tecla = '1'         # Tecla pulsada

        #Respuestas
        hit = 0         # Es target y se pulsa
        miss = 0        # Es target y no se pulsa
        falseA = 0      # Es no target y pulsas
        correctR = 0    # Es no target y no pulsas
        datos = []      # Datos excel de respuestas
      Begin Routine:
        # Manda Trigger según excell "cX.xlsx"
        dev.activate_line(bitmask = Trigger)

        # Si el trigger es 2 o 3 activa el flag 1 y almacena el tiempo transcurrido
        if Trigger == 2 or Trigger == 3:
            flag1 = 1

        # Si el trigger es 4 activa el flag 2 y almacena el tiempo transcurrido
        if Trigger == 4:
            flag2 = 1
      Each Frame:
        # Recoge respuesta teclado y envia trigger5
        keys = respuesta.getKeys()          #Comprueba si se ha pulsado una tecla

        if keys:
            if 'escape' in keys:
                core.quit()
            else:
                tecla = keys[-1]                # Guarda la ultima tecla pulsada en la variable tecla
                if tecla == 'space':          # Si es 'espacio' activa flag 3 y manda trigger 2
                    Trigger2 = 5
                    flag3 = 1
                    dev.activate_line(bitmask = Trigger2)
      End Experiment:
        # Se almacenan los datos de salida
        resultados = pd.DataFrame(datos)
        #resultados.to_excel("Salidas.xlsx", index=False)
      End Routine:
        # Se comprueba si la respuesta es correcta y se suma 1 si lo es. Además se comprueba si es un hit, miss, false alarm o correct rejection
        if flag1 == 1 and flag3 == 0:
            correctR = 1

        if flag2 == 1 and flag3 == 1:
            hit = 1

        if flag1 == 1 and flag3 == 1:
            falseA = 1

        if flag2 == 1 and flag3 == 0:
            miss = 1

        #Se bajan los flags
        flag1 = 0
        flag2 = 0
        flag3 = 0

        # Y se guardan los datos
        ensayo = {
            "Hit": hit,
            "Miss": miss,
            "FA": falseA,
            "CR": correctR
        }
        datos.append(ensayo)

        #Se reinician las variables
        hit = 0
        miss = 0
        falseA = 0
        correctR = 0
  Routine INSTRUCCIONES
    RoutineSettingsComponent INSTRUCCIONES
      desc = Se da las instrucciones de la tarea
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    TextComponent textoInstrucciones
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Va a realizar una tarea 1-back. Dicha tarea consiste en ver una secuencia de letras y adivinar si la letra actual es igual a la anterior. Si es así, debe pulsar la tecla 'espacio'. En caso contrario, no deberá pulsar ninguna tecla.

        La prueba consiste en 20 bloques de 20 letras cada uno. Puede descansar al final de cada bloque si lo desea.

        Si en algún momento está incómodo/a, comuniquenoslo inmediatamente.

        ¡Muchas gracias por su colaboración!

        Por favor, presione la tecla "intro" para continuar.
    CodeComponent alineamientoIzquierda
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        textoInstrucciones.alignText= 'left'
    KeyboardComponent key_instruct
      allowedKeys = 'return'
      correctAns = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_trigger1
      Code Type = Py
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      Begin Experiment:
        #Librerías importadas
        import pyxid2           # Configuración del dispositivo para triggers

        # Define el puerto cedrus
        devices = pyxid2.get_xid_devices()
        if len(devices) == 0:           # Comprueba que el dispositivo esté disponible
            raise RuntimeError("No se encontró ningún dispositivo XID.")
        dev = devices[0]                # Selecciona el primer dispositivo
        dev.set_pulse_duration(300)     # Configura la duración del pulso en milisegundos
        dev.activate_line(bitmask = 1)  # Envía Trigger = S1
  Routine Tiempo_de_espera
    RoutineSettingsComponent Tiempo_de_espera
      desc = Se esperan 2 segundos antes de comenzar la tarea para preparar al participante.
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    TextComponent tEsperaComienzo
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine ComienzoBloque
    RoutineSettingsComponent ComienzoBloque
      desc = Se le da la opción al participante de descansar antes de comenzar el siguiente bloque.
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    TextComponent textoComienzoBloque
      letterHeight = 0.14
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.8
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      text:
        Comienzo siguiente bloque.

        Pulse intro para continuar.
    KeyboardComponent key_ComienzoBloque
      allowedKeys = 'return'
      correctAns = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine FINAL
    RoutineSettingsComponent FINAL
      desc = Se almacenan todos los datos de entrada y salida, se concatenan y se guardan en un excel con un número aleatorio.
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    TextComponent text_gracias
      letterHeight = 0.14
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Muchas gracias por partcicipar.

        Esperamos que le haya gustado.

        Que pase un gran día.

        Presione intro para finalizar.
    KeyboardComponent key_final
      allowedKeys = 'return'
      correctAns = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_save
      Code Type = Py
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      End Experiment:
        # Se leen los archivos de entrada
        archivos = [f'c{i}_1back.csv' for i in range(1, 3)]
        dataframes = []
        for archivo in archivos:
            if os.path.exists(archivo):
                df = pd.read_csv(archivo, sep = ';')
                dataframes.append(df)

        # Y se concatenan verticalmente
        entradas = pd.concat(dataframes, ignore_index=True)

        # Se exporta a un archivo Excel
        #combinado.to_excel('Entradas.xlsx', index=False)

        # Se combinan entradas mas salidas horizontalmente
        #df1 = pd.read_excel('Entradas.xlsx')
        #df2 = pd.read_excel('Salidas.xlsx')
        final = pd.concat([entradas, resultados], axis=1)

        nombreFichero = expInfo['participante'] + '_final_1_back.csv'
        final.to_csv(nombreFichero, index=False)

        # Se pone un nombre aleatorio al archivo final
        #experiment_id = int(random.random()*100)
        #nombre_archivo = f"R{experiment_id}.xlsx"

        # Comprueba si ya existe 1 fichero con ese nombre y lo cambia si es asi
        #if os.path.exists(nombre_archivo):
        #    while os.path.exists(nombre_archivo):
        #        experiment_id = int(random.random()*100)
        #        nombre_archivo = f"R{experiment_id}.xlsx"

        # Almacena todos los datos necesarios en un excel
        #final.to_excel(nombre_archivo, index=False)
Flow
  Routine INSTRUCCIONES
  Routine Tiempo_de_espera
  LoopInitiator Letras1 loopType="TrialHandler"
    conditionsFile = c1_1back.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Letra', 'L'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'Z'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'Y'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'U'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'I'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'K'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'E'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'B'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'B'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'R'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'W'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'F'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'F'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'T'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'V'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'V'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'S'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'S'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'M'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'N'), ('Trigger', 2), ('CorrectAns', None)])]
    Routine trial
  LoopTerminator Letras1
  Routine ComienzoBloque
  LoopInitiator Letras2 loopType="TrialHandler"
    conditionsFile = c2_1back.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Letra', 'Q'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'P'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'C'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'M'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'M'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'W'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'W'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'J'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'G'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'T'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'H'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'Y'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'U'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'X'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'X'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'K'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'D'), ('Trigger', 3), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'D'), ('Trigger', 4), ('CorrectAns', ['space'])]),
      OrderedDict([('Letra', 'L'), ('Trigger', 2), ('CorrectAns', None)]),
      OrderedDict([('Letra', 'R'), ('Trigger', 2), ('CorrectAns', None)])]
    Routine trial
  LoopTerminator Letras2
  Routine FINAL
